PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent Introduction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Welcome to our experiment.

        Please sit still and follow the instructions.
    TextComponent listen_instr
      letterHeight = 0.05
      startVal [time (s)] = 2
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      text:
        Please fixate on the cross while listening.

        Press SPACE to continue.

        Press ESC at any time to exit.
    KeyboardComponent key_continue
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine End
    TextComponent Ending
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = This is the end of the experiment. Thank you. 
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  Routine Fixate
    PolygonComponent cross
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.01
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent Put_hands
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Please put your hands on the clips.
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  Routine blank
    TextComponent Instruction_next_trial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End of this trial. You will now listen to the next music piece.
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  Routine Tap_Imagine
    SoundComponent cue_tap_imagine
      sound = audio/exp1/cue.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9
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    PolygonComponent cross_imagine
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.01
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 19
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    TextComponent Tap_Imagine_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 19
      text = Now, you will imagine the song that you just heard. After the metronome, please TAP WITH BOTH HANDS at every beat you imagine.
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  Routine Listening_Tap
    SoundComponent beat1
      sound [set every repeat] = $stimuli_name
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    SoundComponent cue
      sound = audio/exp1/cue.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    PolygonComponent cross_listen
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.01
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14.5
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  Routine Imagine
    SoundComponent cue_imagine
      sound = audio/exp1/cue.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9
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    PolygonComponent cross_imagine_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.01
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 19
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    TextComponent Imagine_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 19
      text = Now, you will imagine the song that you just heard. After the metronome, please imagine tapping WITHOUT actually moving your hands.
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  Routine blank_train
    TextComponent Instruction_next_train
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please listen to the piece again and tap along.
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  Routine Tap_Imagine_Instruction
    TextComponent Tap_Imagine_instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Now, please put your hands on the clips.

        You will imagine the song that you just heard. After the metronome, please TAP WITH BOTH HANDS at every beat you imagine.
  Routine Imagine_Instruction
    TextComponent Imagine_instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Now, please release the clips.

        You will imagine the song that you just heard. After the metronome, please imagine tapping WITHOUT actually moving your hands.
  Routine Listening_Tap_Instruction
    TextComponent Listening_Tap_Instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Please listen to the song and tap along with every beat you hear.
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  Routine insturction
    TextComponent Listening_Tap_Instruction_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Please listen to the song and tap along with every beat you hear.
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Flow
  Routine Welcome
  Routine Fixate
  LoopInitiator Repeat_experiment loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stimuli_list_exp1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'stimuli_name': 'audio/exp1/snare_mp1.wav'},
        {'stimuli_name': 'audio/exp1/snare_mp2.wav'},
        {'stimuli_name': 'audio/exp1/snare_iso.wav'}]
      Routine insturction
      LoopInitiator Repeat_Train loopType="TrialHandler"
        loopType = random
        nReps = 2
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        Routine Listening_Tap
        Routine blank_train
      LoopTerminator Repeat_Train
      Routine Tap_Imagine_Instruction
      Routine Tap_Imagine
      Routine Imagine_Instruction
      Routine Imagine
      Routine blank
    LoopTerminator trials
  LoopTerminator Repeat_experiment
  Routine End
