PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent music
      sound = test.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 57
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    TextComponent Listen_to_music
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Please sit still and listen to the following piece of music. 
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  Routine Welcome
    TextComponent Introduction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Welcome to our experiment.

        Please sit still and follow the instructions.
  Routine Fix
    PolygonComponent cross
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.01
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Response__Listening_
    TextComponent Intruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Next you will listen to the piece again. Please tap along with the music beats by pressing the space key. Be as precise as you can. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 5
      stopVal [duration (s)] = 57
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    SoundComponent music_2
      sound = test.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 57
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  Routine End
    TextComponent Ending
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = This is the end of the experiment. Thank you. 
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  Routine Response_Imagining
    TextComponent Instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Next, you will imagine the previous piece in your mind. Please tap along with the music beats that you are imagining by pressing the space key. Be as precise as you can.

        Please start after the metronome.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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Flow
  Routine Welcome
  Routine Fix
  Routine trial
  Routine Response__Listening_
  Routine Response_Imagining
  Routine End
