PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent Introduction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Welcome to our experiment.

        Please sit still and follow the instructions.
    TextComponent listen_instr
      letterHeight = 0.05
      startVal [time (s)] = 4
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      text:
        You will listen to a piece of music.
        Please fixate on the cross while listening.

        Press SPACE to continue.

        Press ESC at any time to exit.
    KeyboardComponent key_continue
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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  Routine Response__Listening_
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 8
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    SoundComponent cue_resp
      sound = audio/metronome.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent cross_resp
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.01
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    SoundComponent beat1_resp
      sound = audio/beat1.wav
      startVal [time (s)] = 4
      stopVal [duration (s)] = 8
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  Routine End
    TextComponent Ending
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = This is the end of the experiment. Thank you. 
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  Routine Response_Imagining
    KeyboardComponent key_resp_i
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 8
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    SoundComponent cue_resp_i
      sound = audio/metronome.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent cross_imag
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.01
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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  Routine Listening
    SoundComponent beat1
      sound = audio/beat1.wav
      startVal [time (s)] = 4
      stopVal [duration (s)] = 8
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    SoundComponent cue
      sound = audio/metronome.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent cross_listen
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.01
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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  Routine Fixate
    PolygonComponent cross
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.01
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Response_Instructions
  Routine Response_Instr
    TextComponent resp_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next you will listen to the piece again. Please tap along with the music beats by pressing the space key. Be as precise as you can.

        Press SPACE to continue.
    KeyboardComponent key_wait
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Imag_Instr
    TextComponent imag_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next, you will imagine the previous piece in your mind. Please tap along with the music beats that you are imagining by pressing the SPACE key. Be as precise as you can.

        Please start after the metronome.

        Press SPACE to continue.
    KeyboardComponent key_cont_i
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Imagery_Instr
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Fixate
  Routine Listening
  Routine Response_Instr
  Routine Response__Listening_
  Routine Imag_Instr
  Routine Response_Imagining
  Routine End
